PsychoPy2experiment version="2022.1.4"
Settings
  Data file delimiter = semicolon
  Experiment info = {'participant': '', 'session': '001', 'name': '', 'eta': '', 'gender': '', 'education': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[-1,-1,-1]
  expName = genuine
  keyboardBackend = ioHub
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Routines
  Routine TRIAL
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
      End Routine:
        win.mouseVisible = True
    MovieComponent trial_mp4
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $os.path.join("PEDFE/edited",file)
      size [set every repeat] = (h*2,w*2)
      startVal [time (s)] = 0.0
      units = pix
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  Routine WELCOME
    CodeComponent welcome_code
      Code Type = Auto->JS
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      Begin Experiment:
        original_size = [503,236]
        button_size = [x * 0.5 for x in original_size]
    TextComponent welcome_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Premere il pulsante blu per iniziare
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    ImageComponent welcome_img
      image = interface/button_avanti.png
      pos = (400, -250)
      saveStartStop = False
      size = (button_size[0], button_size[1])
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent welcome_ms
      clickable = welcome_img
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine END
    TextComponent end_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        L'esperimento è finito.

        Grazie
    KeyboardComponent end_kb
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GENUINE
    TextComponent genuine_txt
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = L'emozione mostrata era genuina?
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    SliderComponent genuine_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = "-7","-6","-5","-4","-3","-2","-1","0","1","2","3","4","5","6","7"
      letterHeight = 0.05
      size = (0.95, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (-7, -6,-5,-4,-3,-2,-1,0,1,2,3,4,5,6,7)
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    ImageComponent genuine_img
      image = interface/button_avanti.png
      pos = (400, -250)
      saveStartStop = False
      size = (button_size[0], button_size[1])
      startVal [condition] = genuine_slider.rating
      units = pix
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    MouseComponent genuine_ms
      clickable = genuine_img
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [condition] = genuine_slider.rating
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    TextComponent genuine_txt2
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = -7 = Per niente genuina,  7 = Assolutamente genuina
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  Routine EMOTION
    CodeComponent emotion_code
      Code Type = Auto->JS
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      Begin Experiment:
        button_pos = list([400, 0, -400])
      Begin Routine:
        np.random.shuffle(button_pos)
      End Routine:
        if emotion_ms.clicked_name[-1] == emotion:
            thisExp.addData("accuracy", 1)
        else:
            thisExp.addData("accuracy", 0)
    TextComponent emotion_txt
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = L'emozione mostrata era:
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    ImageComponent fear
      image = interface/button_fear.png
      pos [set every repeat] = (button_pos[0], 0)
      saveStartStop = False
      size = (button_size[0], button_size[1])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent anger
      image = interface/button_anger.png
      pos [set every repeat] = (button_pos[1], 0)
      saveStartStop = False
      size = (button_size[0], button_size[1])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent happiness
      image = interface/button_gioia.png
      pos [set every repeat] = (button_pos[2], 0)
      saveStartStop = False
      size = (button_size[0], button_size[1])
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent emotion_ms
      clickable = happiness,fear,anger
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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  Routine INTENSITY
    TextComponent intensity_txt
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = L'emozione mostrata era intensa?
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    SliderComponent intensity_slider
      forceEndRoutine = False
      granularity = 1
      initVal = 0
      labels = "0","1","2","3","4","5","6","7","8","9"
      letterHeight = 0.05
      size = (0.75, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (0,1,2,3,4,5,6,7,8,9)
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    ImageComponent intensity_img
      image = interface/button_avanti.png
      pos = (400, -250)
      saveStartStop = False
      size = (button_size[0], button_size[1])
      startVal [condition] = intensity_slider.rating
      units = pix
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    MouseComponent intensity_ms
      clickable = intensity_img
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [condition] = intensity_slider.rating
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    TextComponent intensity_txt2
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = 0 = Per niente intensa, 9 = Molto intensa
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  Routine BLACKSCREEN
    CodeComponent blackscreen_code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
    TextComponent blackscreen_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine GESINO
    CodeComponent gesino_code
      Code Type = Auto->JS
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      Begin Experiment:
        button_pos2 = list([400, -400])
      Begin Routine:
        np.random.shuffle(button_pos2)
    TextComponent gesino_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        L'emozione mostrata è genuina?

        v = vero

        n = falso
    ImageComponent si
      disabled = True
      image = interface/button_si.png
      pos [set every repeat] = (button_pos2[0], 0)
      saveStartStop = False
      size = (button_size[0], button_size[1])
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent no
      disabled = True
      image = interface/Button_no.png
      pos [set every repeat] = (button_pos2[1], 0)
      saveStartStop = False
      size = (button_size[0], button_size[1])
      startVal [time (s)] = 0.0
      units = pix
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    MouseComponent gesino__ms
      clickable = si,no
      disabled = True
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    KeyboardComponent gesino_kb
      allowedKeys = 'v','n'
      correctAns = $genuine
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine WELCOME
  LoopInitiator Trials_loop loopType="TrialHandler"
    conditionsFile = PEDFE/edited/PEDFE.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'file': '1_rg_2.mp4', 'id': 1, 'emotion': 'anger', 'elicitation': 'genuine', 'clip': 2, 'time': 2, 'h': 854, 'w': 480, 'genuine': 'v'},
      {'file': '10_fg_2.mp4', 'id': 10, 'emotion': 'happiness', 'elicitation': 'genuine', 'clip': 2, 'time': 2, 'h': 854, 'w': 480, 'genuine': 'v'},
      {'file': '11_rg_4.mp4', 'id': 11, 'emotion': 'anger', 'elicitation': 'genuine', 'clip': 4, 'time': 2, 'h': 854, 'w': 480, 'genuine': 'v'},
      {'file': '12_fg_1.mp4', 'id': 12, 'emotion': 'happiness', 'elicitation': 'genuine', 'clip': 1, 'time': 3, 'h': 854, 'w': 480, 'genuine': 'v'},
      {'file': '12_rg_3.mp4', 'id': 12, 'emotion': 'anger', 'elicitation': 'genuine', 'clip': 3, 'time': 3, 'h': 854, 'w': 480, 'genuine': 'v'},
      {'file': '15_pg_2.mp4', 'id': 15, 'emotion': 'fear', 'elicitation': 'genuine', 'clip': 2, 'time': 2, 'h': 854, 'w': 480, 'genuine': 'v'},
      {'file': '16_pg_1.mp4', 'id': 16, 'emotion': 'fear', 'elicitation': 'genuine', 'clip': 1, 'time': 2, 'h': 854, 'w': 480, 'genuine': 'v'},
      {'file': '16_pg_2.mp4', 'id': 16, 'emotion': 'fear', 'elicitation': 'genuine', 'clip': 2, 'time': 2, 'h': 854, 'w': 480, 'genuine': 'v'},
      {'file': '16_ps_5.mp4', 'id': 16, 'emotion': 'fear', 'elicitation': 'genuine', 'clip': 5, 'time': 2, 'h': 854, 'w': 480, 'genuine': 'v'},
      {'file': '16_rg_2.mp4', 'id': 16, 'emotion': 'anger', 'elicitation': 'genuine', 'clip': 2, 'time': 3, 'h': 854, 'w': 480, 'genuine': 'v'}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
    Routine BLACKSCREEN
    Routine TRIAL
    Routine GESINO
    Routine GENUINE
    Routine EMOTION
    Routine INTENSITY
  LoopTerminator Trials_loop
  Routine END
